---
API: 3
OpenSesame: 4.0.1
Platform: posix
---
set width 1024
set uniform_coordinates yes
set title kosslyn_1978
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground "#000000"
set font_underline no
set font_size 18
set font_italic False
set font_family mono
set font_bold False
set experiment_path "/Users/lbrunel2/Desktop"
set disable_garbage_collection False
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set background "#ffffff"

define sketchpad Consigne_de_la_phase_test
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="Consignes<br /><br /> Dans cette pahse de l'expérience, vous allez être entrendre les lieux que vous avez précédemment appris sur la carte. Il y aura un audio correspondant à un lieu que vous avez vu sur la carte, puis deux secondes après, un  deuxième audio correspondant à un lieu. Vous devrez imaginer faire le déplacement sur la carte entre ces deux lieux et indiquer en pressant la touche q lorsque le trajet vous semble possible ou la touche m lorsque le trajet vous semble impossible.<br />N'oubliez pas de vous représenter mentalement le trajet entre le premier et le deuxième lieu, car il vous le sera demandé de les reproduire par la suite sur la carte.<br /> Apuyez sur une touche pour continuer" x=0 y=0 z_index=0

define feedback Feedback
	set reset_variables yes
	set duration keypress
	set description "Fournit des commentaires au participant"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[drapeau]" text="Bien joué!<br/> Vous pouvez passer à l'étape suivante.<br/> Appuyer sur n'importe quelle touche pour continuer" x=0 y=0 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[nondrapeau]" text="Dommage, vous avez bien placé [nombre_correct] lieux sur 7.<br/> Réessayez.<br/> Appuyer sur n'importe quelle touche pour continuer." x=0 y=0 z_index=0

define loop General_loop
	set source table
	set repeat 50
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "[nombre_correct]=7"
	setcycle 0 empty_column ""
	run general_sequence

define sampler Lieu_1
	set volume 1
	set stop_after 0
	set sample "[lieu_1].ogg"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays a sound file in .wav or .ogg format"

define sketchpad SOA
	set duration 2000
	set description "Displays stimuli"

define inline_script attribution_valeurs
	set description "Exécute du code Python"
	___run__
	if nombre_correct == 7:
	    drapeau = True
	else:
	    nondrapeau = True
	__end__
	set _prepare ""

define sketchpad blank
	set duration 0
	set description "Displays stimuli"

define sketchpad blank_map
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="carte_vierge.png" scale=0.2 show_if=always x=0 y=0 z_index=0

define sketchpad bye
	set duration 3000
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="Merci de votre participation ! " x=0 y=0 z_index=0

define sketchpad consigne
	set duration 2000
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Replacer sur la carte le lieu [landmark]" x=0 y=0 z_index=0

define sketchpad consigne_carte
	set duration keypress
	set description "Affiche les stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="1) Veuillez mémoriser les points marqués par un point rouge sur la carte qui va apparaître. </br> Une fois terminé, appuyez sur une touche pour passer à l'étape suivante. <br />Cliquer sur n'importe quelle touche pour commencer." x=0 y=0 z_index=0

define sketchpad consigne_placer_points
	set duration keypress
	set description "Affiche les stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="2) Des noms de lieux vont être dictés.<br/> Essayez de les replacer sur la carte vierge en étant le plus précis possible.<br />Cliquer sur n'importe quelle touche pour commencer." x=0 y=0 z_index=0

define sketchpad consignes_de_la_phase_d_apprentissage
	set duration keypress
	set description "Affiche les stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="Consignes<br /><br />1 Dans cette phase de l'expérience, vous devrez:<br /><br />1) Mémoriser des lieux marqués par un point rouge sur une carte.<br /><br />2) Replacer ces lieux sur une carte vierge.<br /><br />Un message vous indiquera la marche à suivre à la fin de cette phase.<br /><br />Cliquer sur n'importe quelle touche pour continuer." x=0 y=0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run initialisation_variable True
	run consignes_de_la_phase_d_apprentissage True
	run General_loop always
	run Consigne_de_la_phase_test True
	run test_loop True
	run bye True

define sketchpad fixation_dot
	set duration 750
	set description "Displays stimuli"
	draw fixdot color="#000000" show_if=True style=default x=0 y=0 z_index=0

define sequence general_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run initialisation_nbr_correct True
	run consigne_carte True
	run reset_acc True
	run loop_learning always
	run consigne_placer_points True
	run loop_test always
	run attribution_valeurs True
	run Feedback True

define inline_script initialisation_nbr_correct
	set description "Exécute du code Python"
	___run__
	nombre_correct = 0
	drapeau = False
	nondrapeau = False
	__end__
	set _prepare ""

define inline_script initialisation_variable
	set description "Exécute du code Python"
	___run__
	var.nombre_correct = 0
	var.drapeau = False
	var.nondrapeau = False
	__end__
	set _prepare ""

define keyboard_response keyboard_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "q;m"

define sampler lieu_2
	set volume 1
	set stop_after 0
	set sample "[lieu_2].ogg"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays a sound file in .wav or .ogg format"

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define loop loop_learning
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run map

define loop loop_test
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 7
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 landmark arbre
	setcycle 0 x -115
	setcycle 0 y 165
	setcycle 1 landmark herbe
	setcycle 1 x -180
	setcycle 1 y -104
	setcycle 2 landmark lac
	setcycle 2 x -50
	setcycle 2 y 180
	setcycle 3 landmark puits
	setcycle 3 x -260
	setcycle 3 y 180
	setcycle 4 landmark sable
	setcycle 4 x 155
	setcycle 4 y 285
	setcycle 5 landmark hutte
	setcycle 5 x -190
	setcycle 5 y 264
	setcycle 6 landmark rocher
	setcycle 6 x -9
	setcycle 6 y -326
	run sequence

define sketchpad map
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="carte_test.png" scale=0.2 show_if=always x=0 y=0 z_index=0
	draw fixdot color="#FF0000" show_if=always style=default x=-9 y=-326 z_index=0
	draw fixdot color="#FF0000" show_if=always style=default x=-180 y=-104 z_index=0
	draw fixdot color="#FF0000" show_if=always style=default x=-115 y=165 z_index=0
	draw fixdot color="#FF0000" show_if=always style=default x=-50 y=180 z_index=0
	draw fixdot color="#FF0000" show_if=always style=default x=-260 y=180 z_index=0
	draw fixdot color="#FF0000" show_if=always style=default x=155 y=285 z_index=0
	draw fixdot color="#FF0000" show_if=always style=default x=-190 y=264 z_index=0

define mouse_response mouse_response
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad blank_map
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"

define sampler new_sampler
	set volume 1
	set stop_after 0
	set sample "[landmark].ogg"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Lit un fichier audio au format .wav ou .ogg"

define inline_script nombre_de_clics_corrects
	set description "Exécute du code Python"
	___run__
	import math
	if math.sqrt((cursor_x-x)**2+(cursor_y-y)**2)<50:
	    correct = 1
	    nombre_correct += 1
	else:
	    correct = 0
	__end__
	set _prepare ""

define reset_feedback reset_acc
	set description "A very simple plug-in to reset feedback variables"

define sketchpad response_sketchpad
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="Veuillez indiquer votre réponse" x=0 y=0 z_index=0

define sequence sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run consigne always
	run new_sampler True
	run blank_map always
	run mouse_response always
	run nombre_de_clics_corrects True
	run logger always

define sequence sequence_test
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixation_dot True
	run blank True
	run Lieu_1 True
	run SOA True
	run lieu_2 True
	run response_sketchpad True
	run keyboard_response True
	run logger True

define loop test_loop
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 84
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 paire 32
	setcycle 0 lieu_1 Herbe
	setcycle 0 lieu_2 Rocher
	setcycle 0 distance "4,77"
	setcycle 0 type possible
	setcycle 0 correct_response q
	setcycle 1 paire 65
	setcycle 1 lieu_1 Rocher
	setcycle 1 lieu_2 Epouventail
	setcycle 1 distance no
	setcycle 1 type impossible
	setcycle 1 correct_response m
	setcycle 2 paire 39
	setcycle 2 lieu_1 Herbe
	setcycle 2 lieu_2 Lac
	setcycle 2 distance "5,53"
	setcycle 2 type possible
	setcycle 2 correct_response q
	setcycle 3 paire 15
	setcycle 3 lieu_1 puits
	setcycle 3 lieu_2 Herbe
	setcycle 3 distance "5,23"
	setcycle 3 type possible
	setcycle 3 correct_response q
	setcycle 4 paire 50
	setcycle 4 lieu_1 Rocher
	setcycle 4 lieu_2 pont
	setcycle 4 distance no
	setcycle 4 type impossible
	setcycle 4 correct_response m
	setcycle 5 paire 22
	setcycle 5 lieu_1 Arbre
	setcycle 5 lieu_2 Hutte
	setcycle 5 distance "2,11"
	setcycle 5 type possible
	setcycle 5 correct_response q
	setcycle 6 paire 79
	setcycle 6 lieu_1 Arbre
	setcycle 6 lieu_2 Ruisseau
	setcycle 6 distance no
	setcycle 6 type impossible
	setcycle 6 correct_response m
	setcycle 7 paire 1
	setcycle 7 lieu_1 Hutte
	setcycle 7 lieu_2 Arbre
	setcycle 7 distance "2,11"
	setcycle 7 type possible
	setcycle 7 correct_response q
	setcycle 8 paire 44
	setcycle 8 lieu_1 Hutte
	setcycle 8 lieu_2 phare
	setcycle 8 distance no
	setcycle 8 type impossible
	setcycle 8 correct_response m
	setcycle 9 paire 9
	setcycle 9 lieu_1 Rocher
	setcycle 9 lieu_2 Lac
	setcycle 9 distance "8,93"
	setcycle 9 type possible
	setcycle 9 correct_response q
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	setcycle 11 paire 72
	setcycle 11 lieu_1 Lac
	setcycle 11 lieu_2 phare
	setcycle 11 distance no
	setcycle 11 type impossible
	setcycle 11 correct_response m
	setcycle 12 paire 68
	setcycle 12 lieu_1 Sable
	setcycle 12 lieu_2 Epouventail
	setcycle 12 distance no
	setcycle 12 type impossible
	setcycle 12 correct_response m
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	setcycle 17 paire 18
	setcycle 17 lieu_1 Lac
	setcycle 17 lieu_2 Herbe
	setcycle 17 distance "5,53"
	setcycle 17 type possible
	setcycle 17 correct_response q
	setcycle 18 paire 54
	setcycle 18 lieu_1 puits
	setcycle 18 lieu_2 "Feu de camp"
	setcycle 18 distance no
	setcycle 18 type impossible
	setcycle 18 correct_response m
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	setcycle 30 paire 35
	setcycle 30 lieu_1 Sable
	setcycle 30 lieu_2 puits
	setcycle 30 distance "7,60"
	setcycle 30 type possible
	setcycle 30 correct_response q
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	setcycle 40 paire 78
	setcycle 40 lieu_1 Herbe
	setcycle 40 lieu_2 pont
	setcycle 40 distance no
	setcycle 40 type impossible
	setcycle 40 correct_response m
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	run sequence_test

